//Bspline Transformation

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)

(UseDirectionCosines "true")

//Components
(Registration "MultiResolutionRegistration") //default MultiMetricMultiResolutionRegistration
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator") // default LinearInterpolator
(Metric "AdvancedMattesMutualInformation") // default AdvancedMattesMutualInformation TransformBendingEnergyPenalty
(Optimizer "StandardGradientDescent") // default AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalNearestNeighborInterpolator") // default FinalBSplineInterpolator
(Resampler "DefaultResampler")
(Transform "BSplineTransform")

(ErodeMask "false" )

(NumberOfResolutions 4) // default 4
(FinalGridSpacingInVoxels 10.000000 10.000000 10.000000)

(HowToCombineTransforms "Compose")

(WriteTransformParametersEachIteration "false")
(WriteResultImage "false")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")
(WriteDiffusionFiles "false")

// Option supported in Elastix-4.1:
(UseFastAndLowMemoryVersion "true")

//Maximum number of iterations in each resolution level: 5000
(MaximumNumberOfIterations 10000 ) // default 500

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate") // default Random
(FixedImageBSplineInterpolationOrder 1)
(UseRandomSampleRegion "true")
(SampleRegionSize 50.0 50.0 50.0) // default 50.0
(NumberOfSpatialSamples 10000) // default 2048
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10) // default 8

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3) // default 1

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 10000.0)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 100.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.6)
